WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    GroupWorkflow
        IntProperty(Value=0) => #0
        StringProperty => #1
        DoubleProperty(Value=0) => #2
        DoubleProperty(Value=0) => #3
        DoubleProperty(Value=0) => #4
        DoubleProperty(Value=0) => #5
        IntProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
              Item1 as TrialNumber,
              Item2 as TrialJsonFile,
              Item3 as MinReappearance,
              Item4 as MaxReappearance,
              Item5 as OcclusionStart,
              Item6 as CorridorSize,
              Item7 as IsPassiveReward
            )
        -> WorkflowOutput
    -> IgnoreElements
    -> BehaviorSubject TrialAttributes

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject Licking?
    -> BehaviorSubject ROIActivated?

    ExternalizedMapping(Value(DisplayName=Filepath))
    -> StringProperty(Value=.\data)
    -> BehaviorSubject LogPath

    ExternalizedMapping(Value(DisplayName=MouseName))
    -> StringProperty(Value=PD004)
    -> BehaviorSubject MouseName

    ExternalizedMapping(Value(DisplayName=Protocol_ID))
    -> StringProperty(Value=passive_training)
    -> BehaviorSubject Protocol

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject InitTrial
    -> BehaviorSubject EndTrial

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject LickCount

    IntProperty(Value=0)
    -> BehaviorSubject GoReward

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject ROIValue

    ExternalizedMapping(Value(DisplayName=MinLickThreshold))
    -> DoubleProperty(Value=70)
    -> BehaviorSubject ROILickThreshold

    SubscribeSubject TrialFile
    -> PropertyMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName=Trials\trials.csv, ScanPattern="", SkipRows=1) => #33
    SubscribeSubject TrialFile => #34
    #33, #34 -> SubscribeWhen
    -> Count
    -> BehaviorSubject NumberOfTrials

    ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
    -> FloatProperty(Value=0.3)
    -> BehaviorSubject RotEncMin

    ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
    -> FloatProperty(Value=4.6)
    -> BehaviorSubject RotEncMax

    IntProperty(Value=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0.0 as Position,
        0.0 as Diference,
        0 as Turns)
    -> BehaviorSubject WheelData

    FloatProperty(Value=0)
    -> BehaviorSubject Encoder

    BooleanProperty(Value=false)
    -> BehaviorSubject TimeOut

    Disable IntProperty(Value=0) => #51
    Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> Disable PublishSubject ReloadVRFile
    -> Disable IntProperty(Value=0) => #54
    #51, #54 -> Disable Merge => #55
    Disable StringProperty(Value=Protocols\paralax_settings.yaml) => #56
    #55, #56 -> Disable WithLatestFrom
    -> Disable InputMapping(Selector=it, Path(Selector=Item2))

    IntProperty(Value=0)
    -> BehaviorSubject TrialNr

    ExternalizedMapping(Value(DisplayName=TrialFile))
    -> StringProperty(Value=Trials\trials.csv)
    -> BehaviorSubject TrialFile

    ExternalizedMapping(Value(DisplayName="RewardDuration (ms)"))
    -> IntProperty(Value=90)
    -> BehaviorSubject RewardDuration

    FloatProperty(Value=0.9)
    -> BehaviorSubject RewardDistance

    ExternalizedMapping(Value(DisplayName="MaxRewardSpeed (m/s)"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject MaxRewardSpeed

    FloatProperty(Value=1)
    -> BehaviorSubject RunningSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotalDistance

    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    SubscribeSubject RewardDistance
    -> Take(Count=1)
    -> BehaviorSubject NextRewardPosition

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

    IntProperty(Value=0)
    -> BehaviorSubject NumberOfRewards

    ExternalizedMapping(Value(DisplayName="DropSize (ul)"))
    -> FloatProperty(Value=8)
    -> BehaviorSubject "DropSize (ul)"

    FloatProperty(Value=0)
    -> BehaviorSubject WaterDelivered

GroupWorkflow HarpDevice
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject BehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=44, PayloadType=TimestampedS16, IsArray=false)) => #4
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    SubscribeSubject WheelEncoder
    -> Skip(Count=2)
    -> Take(Count=1)
    -> BehaviorSubject EncoderInit

    Int64Property(Value=99) => #14
    SubscribeSubject HarpTimestamp => #15
    #14, #15 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S) => #18
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S) => #21
    ExternalizedMapping(PwmFrequencyDO3(DisplayName=CameraFrequency)) => #22
    #21, #22 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmFrequencyDO3Payload(PwmFrequencyDO3=60))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO3Payload(PwmDutyCycleDO3=10))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO3))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #29
    #18, #29 -> WithLatestFrom
    -> MulticastSubject TriggerData

    ExternalizedMapping(Camera0Frequency)

    Timer(DueTime=PT5S, Period=PT2S) => #33
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #39
    #33, #39 -> WithLatestFrom
    -> MulticastSubject TriggerData

    SubscribeSubject GoReward
    -> Skip(Count=1) => #43
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> IntProperty(Value=0) => #45
    #43, #45 -> Merge
    -> SelectMany GiveReward
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2)) => #2
        SubscribeSubject RewardDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO2(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=90)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> MulticastSubject BehaviorCommands

GroupWorkflow ShadersDynamicRendering
    Disable ExternalizedMapping(Width, Height, Location, WindowState)
    -> Disable Bonsai.Shaders.CreateWindow => #1
      Width=420
      Height=270
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    ExternalizedMapping(Width, Height, Location, WindowState)
    -> Bonsai.Shaders.CreateWindow => #3
      Width=4096
      Height=1536
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=1920, Y=0)
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    #1, #3 -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Cylinder, FileName=Models\cylinder.obj)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PlainColorShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\plain_color.vert
          FragmentShader=Shaders\plain_color.frag
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BackWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_back.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard2.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=FrontWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=LeftWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=RightWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BG_0.04_0.32_100
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\background\BG_0.04_0.32_100.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Rocks
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\rocks.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=checker
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_45_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Objects\grating_40x35cm_diag_45_1cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_135_far
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Objects\grating_15x35cm_diag_135_1cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=circles_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\shapes_low_sf\pattern_40x35cm_circles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=circles_far
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_15x35cm_circles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=triangles_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_triangles_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=diamonds_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_diamonds_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=squares_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Shapes_high_sf\pattern_40x35cm_squares_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=polka_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Dots\pattern_40x35cm_polka_dots_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=zigzag_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Patterns\pattern_40x35cm_zigzag_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=brick_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Patterns\pattern_40x35cm_brick_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=spiral_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_spiral_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=checkerboard_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_checkerboard_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=concentric_near
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Waves\pattern_40x35cm_concentric_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grating_45_far_blue
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\gratings_blue\pattern_40x35cm_diag_45_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertical_far_blue
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\gratings_blue\pattern_15x35cm_vertical_0.5cpd.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Less)))
    -> Bonsai.Resources.LoadResources

    SubscribeSubject TotalDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-0)
    -> MulticastSubject CameraPosition

    SubscribeSubject TrialAttributes
    -> InputMapping(Selector=it, Path(Selector=TrialJsonFile))
    -> SelectMany
        ExternalizedMapping(Path)
        -> Bonsai.IO.ReadAllText(Path=Trials\trial_001.json)
        -> VRCorridorSchema.DeserializeFromYaml(Type=TypeMapping<VRCorridorSchema.VRCorridorSchema>)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable PublishSubject TaskProperties
    -> Disable BehaviorSubject TaskProperties
    -> PublishSubject ReloadVRFile
    -> Delay(DueTime=PT0.05S)
    -> PublishSubject TaskProperties => #22
    Annotation "Wait for all parameters to be set."(Text="")
    -> Timer(DueTime=PT0.5S) => #24
    #22, #24 -> SubscribeWhen

    SubscribeSubject ReloadVRFile
    -> CreateObservable ReloadScene
        WorkflowInput Source1 => #0
        -> GroupWorkflow DrawRewards
            WorkflowInput Source1 => #0
            SubscribeSubject TaskProperties => #1
            ExternalizedMapping(Selector) => #2
            #1, #2 -> MemberSelector(Selector=Reward)
            -> Concat => #4
            #0, #4 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
            -> SelectMany DrawRepetitions => #8
                ExternalizedMapping(Count(DisplayName=Repetitions))
                -> Range(Start=0, Count=4) => #1
                WorkflowInput Source1 => #2
                #1, #2 -> WithLatestFrom
                -> SelectMany DrawObjects => #4
                    SubscribeSubject CameraPosition => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom => #2
                    SubscribeSubject NextRewardPosition => #3
                    #2, #3 -> WithLatestFrom => #4
                    SubscribeSubject RewardDistance => #5
                    #4, #5 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                          Item1.Item1.Item1.Z as CameraPosition,
                          Item1.Item1.Item2.Item1 as Repetition,
                          Item1.Item1.Item2.Item2 as Landmark,
                          Item1.Item2 as RewardPosition,
                          Item2 as RewardInterval
                        )
                    -> BehaviorSubject LandmarkData

                    SubscribeSubject Draw => #9
                    SubscribeSubject LandmarkData => #10
                    #9, #10 -> WithLatestFrom => #11
                    -> Condition TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> NotEqual(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawTexturedObject => #13
                        WorkflowInput Source1
                        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
                        SubscribeSubject LandmarkData => #3
                        #2, #3 -> WithLatestFrom => #4
                        -> InputMapping => #5
                          Selector=Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #4 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -RewardInterval * Landmark.RepeatInterval + RewardPosition
                        -> PropertyMapping(TranslationZ) => #8
                        #5, #8 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-0.049
                          TranslationY=0
                          TranslationZ=-1.5708
                          RotationZ=0
                          RotationY=-89.95438
                          RotationX=0
                          ScaleX=0.63
                          ScaleY=0.08
                          ScaleZ=0.1
                          Ambient(X=1, Y=1, Z=1)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #11 -> Condition Non-TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> Equal(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawPlainObject => #15
                        WorkflowInput Source1 => #0
                        SubscribeSubject LandmarkData => #1
                        #0, #1 -> WithLatestFrom => #2
                        -> InputMapping => #3
                          Selector=Item1.Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #2 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -RewardInterval * Landmark.RepeatInterval + RewardPosition
                        -> PropertyMapping(TranslationZ) => #6
                        #3, #6 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawModel.bonsai
                          TranslationX=-0.045
                          TranslationY=0
                          TranslationZ=-0.9
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.1
                          ScaleY=0.08
                          ScaleZ=0.1
                          Ambient(X=1, Y=1, Z=0)
                          Diffuse(X=1, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #13, #15 -> Merge
                    -> IntProperty(Value=0) => #17
                    Disable SubscribeSubject ReloadVRFile => #18
                    #17, #18 -> Disable TakeUntil
                    -> WorkflowOutput
                Disable SubscribeSubject ReloadVRFile => #5
                #4, #5 -> Disable TakeUntil
                -> WorkflowOutput
            Disable SubscribeSubject ReloadVRFile => #9
            #8, #9 -> Disable TakeUntil
            -> WorkflowOutput
        -> WorkflowOutput
        #0 -> GroupWorkflow DrawLandmarks
            WorkflowInput Source1 => #0
            SubscribeSubject TaskProperties => #1
            ExternalizedMapping(Selector) => #2
            #1, #2 -> MemberSelector(Selector=Landmarks)
            -> Concat => #4
            #0, #4 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
            -> SelectMany DrawRepetitions => #8
                ExternalizedMapping(Count(DisplayName=Repetitions))
                -> Range(Start=0, Count=1) => #1
                WorkflowInput Source1 => #2
                #1, #2 -> WithLatestFrom
                -> SelectMany DrawObjects => #4
                    SubscribeSubject CameraPosition => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                          Item1.Z as CameraPosition,
                          Item2.Item1 as Repetition,
                          Item2.Item2 as Landmark
                        )
                    -> BehaviorSubject LandmarkData

                    SubscribeSubject Draw => #5
                    SubscribeSubject LandmarkData => #6
                    #5, #6 -> WithLatestFrom => #7
                    -> Condition TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> NotEqual(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawTexturedObject => #9
                        WorkflowInput Source1
                        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=zigzag_near, TextureTarget=Texture2D) => #2
                        SubscribeSubject LandmarkData => #3
                        #2, #3 -> WithLatestFrom => #4
                        -> InputMapping => #5
                          Selector=Item1
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #4 -> Disable MemberSelector(Selector=Item2)
                        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> Disable PropertyMapping(TranslationZ) => #8
                        #4 -> MemberSelector(Selector=Item2) => #9
                        -> Condition "ChangeLocation == 0?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation)
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> GroupWorkflow StandardSettings => #11
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.Translation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                            #0 -> MemberSelector(Selector=Landmark.Scale) => #3
                            #0 -> MemberSelector(Selector=Landmark.AmbientColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #9 -> Condition "ChangeLocation != 0?" => #12
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation)
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition "Distance < ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> GreaterThan
                            -> WorkflowOutput
                        -> GroupWorkflow StandardSettings => #14
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.Translation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                            #0 -> MemberSelector(Selector=Landmark.Scale) => #3
                            #0 -> MemberSelector(Selector=Landmark.AmbientColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #12 -> Condition "Distance >= ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> LessThanOrEqual
                            -> WorkflowOutput
                        -> GroupWorkflow ModifiedSettings => #16
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.ChangeTranslation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.ChangeTranslation[2]
                            #0 -> MemberSelector(Selector=Landmark.ChangeScale) => #3
                            #0 -> MemberSelector(Selector=Landmark.ChangeColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #11, #14, #16 -> Merge
                        -> PropertyMapping => #18
                          TranslationX(Selector=Item1[0])
                          TranslationY(Selector=Item1[1])
                          TranslationZ(Selector=Item2)
                          ScaleX(Selector=Item3[0])
                          ScaleY(Selector=Item3[1])
                          ScaleZ(Selector=Item3[2])
                          Ambient(Selector="Item4[0], Item4[1], Item4[2]")
                        #5, #8, #18 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=1.4
                          TranslationY=0
                          TranslationZ=-2.58829
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.56
                          ScaleY=0.56
                          ScaleZ=0
                          Ambient(X=1, Y=1, Z=1)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #7 -> Condition Non-TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> Equal(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawPlainObject => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject LandmarkData => #1
                        #0, #1 -> WithLatestFrom => #2
                        -> InputMapping => #3
                          Selector=Item1.Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #2 -> Disable MemberSelector(Selector=Item2)
                        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> Disable PropertyMapping(TranslationZ) => #6
                        #2 -> MemberSelector(Selector=Item2) => #7
                        -> Condition "ChangeLocation == 0?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation)
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> GroupWorkflow StandardSettings => #9
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.Translation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                            #0 -> MemberSelector(Selector=Landmark.Scale) => #3
                            #0 -> MemberSelector(Selector=Landmark.AmbientColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #7 -> Condition "ChangeLocation != 0?" => #10
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation)
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition "Distance < ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> GreaterThan
                            -> WorkflowOutput
                        -> GroupWorkflow StandardSettings => #12
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.Translation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                            #0 -> MemberSelector(Selector=Landmark.Scale) => #3
                            #0 -> MemberSelector(Selector=Landmark.AmbientColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #10 -> Condition "Distance >= ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Landmark.ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> LessThanOrEqual
                            -> WorkflowOutput
                        -> GroupWorkflow ModifiedSettings => #14
                            WorkflowInput Source1 => #0
                            -> MemberSelector(Selector=Landmark.ChangeTranslation) => #1
                            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                              Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.ChangeTranslation[2]
                            #0 -> MemberSelector(Selector=Landmark.ChangeScale) => #3
                            #0 -> MemberSelector(Selector=Landmark.ChangeColor) => #4
                            #1, #2, #3, #4 -> Zip
                            -> WorkflowOutput
                        #9, #12, #14 -> Merge
                        -> PropertyMapping => #16
                          TranslationX(Selector=Item1[0])
                          TranslationY(Selector=Item1[1])
                          TranslationZ(Selector=Item2)
                          ScaleX(Selector=Item3[0])
                          ScaleY(Selector=Item3[1])
                          ScaleZ(Selector=Item3[2])
                          Ambient(Selector="Item4[0], Item4[1], Item4[2]")
                        #3, #6, #16 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawModel.bonsai
                          TranslationX=2.42
                          TranslationY=0
                          TranslationZ=-2.8376
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.1815
                          ScaleY=0.4477
                          ScaleZ=0.1815
                          Ambient(X=0, Y=1, Z=1)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Cylinder
                        -> WorkflowOutput
                    #9, #11 -> Merge
                    -> IntProperty(Value=0) => #13
                    Disable SubscribeSubject ReloadVRFile => #14
                    #13, #14 -> Disable TakeUntil
                    -> WorkflowOutput

                    Disable GroupWorkflow DrawTexturedObject
                        WorkflowInput Source1
                        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=zigzag_near, TextureTarget=Texture2D) => #2
                        SubscribeSubject LandmarkData => #3
                        #2, #3 -> WithLatestFrom => #4
                        -> InputMapping => #5
                          Selector=Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #4 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> PropertyMapping(TranslationZ) => #8
                        #4 -> MemberSelector(Selector=Item2.Landmark) => #9
                        -> Condition "ChangeLocation == 0?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation)
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> MemberSelector(Selector=AmbientColor) => #11
                        #9 -> Condition "ChangeLocation != 0?" => #12
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation)
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition "Distance < ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> GreaterThan
                            -> WorkflowOutput
                        -> MemberSelector(Selector=AmbientColor) => #14
                        #12 -> Condition "Distance >= ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> LessThanOrEqual
                            -> WorkflowOutput
                        -> MemberSelector(Selector=ChangeColor) => #16
                        #11, #14, #16 -> Merge
                        -> PropertyMapping(Ambient(Selector="it[0], it[1], it[2]")) => #18
                        #5, #8, #18 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=1.4
                          TranslationY=0
                          TranslationZ=-2.58829
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.56
                          ScaleY=0.56
                          ScaleZ=0
                          Ambient(X=1, Y=1, Z=1)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput

                    Disable GroupWorkflow DrawPlainObject
                        WorkflowInput Source1 => #0
                        SubscribeSubject LandmarkData => #1
                        #0, #1 -> WithLatestFrom => #2
                        -> InputMapping => #3
                          Selector=Item1.Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #2 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> PropertyMapping(TranslationZ) => #6
                        #2 -> MemberSelector(Selector=Item2.Landmark) => #7
                        -> Condition "ChangeLocation == 0?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation)
                            -> Equal(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> MemberSelector(Selector=AmbientColor) => #9
                        #7 -> Condition "ChangeLocation != 0?" => #10
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation)
                            -> NotEqual(Operand=FloatProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition "Distance < ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> GreaterThan
                            -> WorkflowOutput
                        -> MemberSelector(Selector=AmbientColor) => #12
                        #10 -> Condition "Distance >= ChangeLocation?"
                            WorkflowInput Source1
                            -> MemberSelector(Selector=ChangeLocation) => #1
                            SubscribeSubject TotalDistance => #2
                            #1, #2 -> WithLatestFrom
                            -> LessThanOrEqual
                            -> WorkflowOutput
                        -> MemberSelector(Selector=ChangeColor) => #14
                        #9, #12, #14 -> Merge
                        -> PropertyMapping(Ambient(Selector="it[0], it[1], it[2]")) => #16
                        #3, #6, #16 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawModel.bonsai
                          TranslationX=2.42
                          TranslationY=0
                          TranslationZ=-2.8376
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.1815
                          ScaleY=0.4477
                          ScaleZ=0.1815
                          Ambient(X=0, Y=1, Z=1)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Cylinder
                        -> WorkflowOutput
                Disable SubscribeSubject ReloadVRFile => #5
                #4, #5 -> Disable TakeUntil
                -> WorkflowOutput
            Disable SubscribeSubject ReloadVRFile => #9
            #8, #9 -> Disable TakeUntil
            -> WorkflowOutput
        #0 -> GroupWorkflow DrawArena
            WorkflowInput Source1 => #0
            SubscribeSubject TaskProperties => #1
            ExternalizedMapping(Selector) => #2
            #1, #2 -> MemberSelector(Selector=Arena)
            -> Concat => #4
            #0, #4 -> CombineLatest
            -> MemberSelector(Selector=Item2)
            -> InputMapping(Selector=it, Repetitions(Selector=it.Repetitions))
            -> SelectMany DrawRepetitions => #8
                ExternalizedMapping(Count(DisplayName=Repetitions))
                -> Range(Start=0, Count=4) => #1
                WorkflowInput Source1 => #2
                #1, #2 -> WithLatestFrom
                -> SelectMany DrawObjects => #4
                    SubscribeSubject CameraPosition => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                          Item1.Z as CameraPosition,
                          Item2.Item1 as Repetition,
                          Item2.Item2 as Landmark
                        )
                    -> BehaviorSubject LandmarkData

                    SubscribeSubject Draw => #5
                    SubscribeSubject LandmarkData => #6
                    #5, #6 -> WithLatestFrom => #7
                    -> Condition TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> NotEqual(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawTexturedObject => #9
                        WorkflowInput Source1
                        -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Landmark.Texture))
                        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=checker, TextureTarget=Texture2D) => #2
                        SubscribeSubject LandmarkData => #3
                        #2, #3 -> WithLatestFrom => #4
                        -> InputMapping => #5
                          Selector=Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #4 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> PropertyMapping(TranslationZ) => #8
                        #5, #8 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-0.08
                          TranslationZ=-1.5708
                          RotationZ=0
                          RotationY=0
                          RotationX=-89.95438
                          ScaleX=0.63
                          ScaleY=0.63
                          ScaleZ=0.1
                          Ambient(X=1, Y=1, Z=1)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #7 -> Condition Non-TexturedObject?
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2.Landmark.Texture)
                        -> Equal(Operand=StringProperty(Value=None))
                        -> WorkflowOutput
                    -> GroupWorkflow DrawPlainObject => #11
                        WorkflowInput Source1 => #0
                        SubscribeSubject LandmarkData => #1
                        #0, #1 -> WithLatestFrom => #2
                        -> InputMapping => #3
                          Selector=Item1.Item1
                          TranslationX(Selector=Item2.Landmark.Translation[0])
                          TranslationY(Selector=Item2.Landmark.Translation[1])
                          RotationZ(Selector=Item2.Landmark.Rotation[2])
                          RotationY(Selector=Item2.Landmark.Rotation[1])
                          RotationX(Selector=Item2.Landmark.Rotation[0])
                          ScaleX(Selector=Item2.Landmark.Scale[0])
                          ScaleY(Selector=Item2.Landmark.Scale[1])
                          ScaleZ(Selector=Item2.Landmark.Scale[2])
                          Ambient(Selector="Item2.Landmark.AmbientColor[0], Item2.Landmark.AmbientColor[1], Item2.Landmark.AmbientColor[2]")
                          Diffuse(Selector="Item2.Landmark.DiffuseColor[0], Item2.Landmark.DiffuseColor[1], Item2.Landmark.DiffuseColor[2]")
                          Specular(Selector="Item2.Landmark.SpecularColor[0], Item2.Landmark.SpecularColor[1], Item2.Landmark.SpecularColor[2]")
                          MeshName(Selector=Item2.Landmark.MeshType)
                        #2 -> MemberSelector(Selector=Item2)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: -Repetition * Landmark.RepeatInterval + Math.Floor(CameraPosition/Landmark.RepeatInterval) * Landmark.RepeatInterval + Landmark.Translation[2]
                        -> PropertyMapping(TranslationZ) => #6
                        #3, #6 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawModel.bonsai
                          TranslationX=0.045
                          TranslationY=0
                          TranslationZ=-3.1416
                          RotationZ=0
                          RotationY=89.95438
                          RotationX=0
                          ScaleX=0.1
                          ScaleY=0.08
                          ScaleZ=0.1
                          Ambient(X=1, Y=0, Z=0)
                          Diffuse(X=1, Y=0, Z=0)
                          Specular(X=0, Y=0, Z=0)
                          SpecularExponent=10
                          MeshName=Plane
                        -> WorkflowOutput
                    #9, #11 -> Merge
                    -> IntProperty(Value=0) => #13
                    Disable SubscribeSubject ReloadVRFile => #14
                    #13, #14 -> Disable TakeUntil
                    -> WorkflowOutput
                Disable SubscribeSubject ReloadVRFile => #5
                #4, #5 -> Disable TakeUntil
                -> WorkflowOutput
            Disable SubscribeSubject ReloadVRFile => #9
            #8, #9 -> Disable TakeUntil
            -> WorkflowOutput
    -> Switch

Disable GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge
    -> BehaviorSubject DistanceAdded

    SubscribeSubject Draw => #13
    SubscribeSubject TotalDistance => #14
    #13, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #16
    -> Skip(Count=1) => #17
    #17, #16 -> Zip
    -> Subtract
    -> MulticastSubject RunningSpeed

    SubscribeSubject DistanceAdded
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> Accumulate
    -> MulticastSubject TotalDistance

Disable GroupWorkflow KeyboardNavigation
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> FloatProperty(Value=0.1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> FloatProperty(Value=-0.1) => #3
    FloatProperty(Value=0) => #4
    #1, #3, #4 -> Merge
    -> Accumulate
    -> MulticastSubject CameraOrientation

    Bonsai.Shaders.RenderFrame => #8
    SubscribeSubject RunningSpeed => #9
    #8, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #11
    SubscribeSubject CameraOrientation => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> Accumulate
    -> MulticastSubject CameraPosition

    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #20
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #22
    Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> FloatProperty(Value=0) => #24
    FloatProperty(Value=0) => #25
    #20, #22, #24, #25 -> Merge => #26
    ExternalizedMapping(Value(DisplayName="SpeedGain (m/s)"))
    -> FloatProperty(Value=0.2) => #28
    ExternalizedMapping(Value(DisplayName="GraphicsRefreshRate (Hz)")) => #29
    Annotation GraphicsRateNormalization(Text="It divides by 60 which is the typical refresh rate of the graphics card.") => #30
    #28, #29, #30 -> Divide(Operand=FloatProperty(Value=60)) => #31
    #26, #31 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject RunningSpeed

    Disable Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=-1) => #36
    Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=1) => #38
    Disable Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
    -> Disable FloatProperty(Value=0) => #40
    Disable FloatProperty(Value=0) => #41
    #36, #38, #40, #41 -> Disable Merge => #42
    Disable FloatProperty(Value=0) => #43
    #42, #43 -> Disable WithLatestFrom => #44
    Disable SubscribeSubject CameraOrientation => #45
    #44, #45 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0.198669344, Y=0, Z=-0.9800666)
    -> Disable Accumulate
    -> Disable BehaviorSubject CameraPosition

Disable GroupWorkflow FakeWheelEncoder
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> DoubleProperty(Value=0.1) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> DoubleProperty(Value=-0.1) => #4
    DoubleProperty(Value=0.1) => #5
    #2, #4, #5 -> Merge
    -> Accumulate
    -> MulticastSubject WheelEncoder => #8
    SubscribeSubject WheelEncoder
    -> Condition => #10
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=4.7))
        -> WorkflowOutput
    #8, #10 -> TakeUntil
    -> Repeat
    -> WorkflowOutput

GroupWorkflow HarpWheelNavigation
    GroupWorkflow InitWheelData
        IntProperty(Value=0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            0.0 as Position,
            0.0 as Diference,
            0 as Turns)
        -> MulticastSubject WheelData

        FloatProperty(Value=0)
        -> MulticastSubject Encoder

        BooleanProperty(Value=false)
        -> MulticastSubject TimeOut

    Annotation WheelData(Text="")
    -> SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip => #4
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Accumulation.Diference)
            #0 -> MemberSelector(Selector=Value.Diference)
            #4 -> MemberSelector(Selector=Item1)
            #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
        -> MulticastSubject WheelData
    -> Switch

    Annotation CalculateWheelDistanceAndSpeed(Text="")
    -> SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject RotEncMin
        SubscribeSubject RotEncMax

        SubscribeSubject WheelData
        -> MemberSelector(Selector=Position)
        -> Bonsai.Dsp.Difference(Order=1) => #4
        -> Condition => #5
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThanOrEqual(Operand=DoubleProperty(Value=0.01))
            -> WorkflowOutput
        #4 -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.01))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #7
        #5, #7 -> Merge
        -> Disable DoubleProperty(Value=0.004)
        -> Accumulate => #10
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #12
        #10, #12 -> Subtract(Operand=FloatProperty(Value=0.3)) => #13
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #15
        #13, #15 -> Divide(Operand=FloatProperty(Value=4.6))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #18
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #20
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #20 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunningSpeed
    -> Switch

    Annotation UpdateEncoderLimits(Text="")
    -> SubscribeSubject WheelData => #10
    Annotation "Because the first values are 0"(Text="") => #11
    #10, #11 -> Skip(Count=10)
    -> MemberSelector(Selector=Position)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
      Expression: Convert.ToSingle(it)
    SubscribeSubject RotEncMin => #15
    #14, #15 -> WithLatestFrom
    -> Bonsai.Numerics.Min
    -> MulticastSubject RotEncMin
    SubscribeSubject RotEncMax => #19
    #14, #19 -> WithLatestFrom
    -> Bonsai.Numerics.Max
    -> MulticastSubject RotEncMax

    Disable SubscribeSubject WheelEncoder
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it as Position,
        0.0 as Diference,
        0 as Turns)
    -> Disable Scan
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value.Position)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
        #3, #0 -> Zip => #4
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Value.Position as Position,
            Item1 as Diference,
            Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=Accumulation.Diference)
        #0 -> MemberSelector(Selector=Value.Diference)
        #4 -> MemberSelector(Selector=Item1)
        #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
    -> Disable MulticastSubject WheelData

    Disable SubscribeSubject WheelData
    -> Disable Bonsai.IO.CsvWriter(FileName=data/voltage.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false) => #28
    -> Disable MemberSelector(Selector=Position) => #29
    Disable SubscribeSubject RotEncMin
    -> Disable PropertyMapping(Value) => #31
    #29, #31 -> Disable Subtract(Operand=FloatProperty(Value=0.1568)) => #32
    Disable SubscribeSubject RotEncMax
    -> Disable PropertyMapping(Value) => #34
    #32, #34 -> Disable Divide(Operand=FloatProperty(Value=4.649658)) => #35
    #28 -> Disable MemberSelector(Selector=Turns)
    -> Disable PropertyMapping(Value) => #37
    #35, #37 -> Disable Add(Operand=FloatProperty(Value=7))
    -> Disable Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=20, Cutoff2=0, FilterOrder=3, FilterType=LowPass) => #39
    Disable ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #40
    #39, #40 -> Disable Multiply(Operand=DoubleProperty(Value=0.62832)) => #41
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: single(it)
    -> Disable MulticastSubject TotalDistance
    #41 -> Disable Multiply(Operand=DoubleProperty(Value=1000))
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable MulticastSubject RunningSpeed

    Disable DoubleProperty(Value=0)
    -> Disable BehaviorSubject PrevValue

    Disable SubscribeSubject RotEncMin
    Disable SubscribeSubject RotEncMax

GroupWorkflow CameraData
    Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
    -> BehaviorSubject FrameData
    -> MemberSelector(Selector=Image)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=326, Y=241, Width=4, Height=4))
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0)
    -> MulticastSubject ROIValue
    -> WorkflowOutput

GroupWorkflow RewardDetection
    SubscribeSubject GoReward
    -> Skip(Count=1)
    -> IntProperty(Value=1)
    -> Accumulate => #3
    -> MulticastSubject NumberOfRewards => #4
    SubscribeSubject "DropSize (ul)" => #5
    #3, #5 -> WithLatestFrom
    -> Multiply
    -> MulticastSubject WaterDelivered => #8
    #4, #8 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          Item1 as NumberOfRewards,
          Item2 as TotalWaterDelivered
        )
    -> WorkflowOutput

    Disable SubscribeSubject TotalDistance
    -> Disable Multiply(Operand=FloatProperty(Value=-1)) => #13
    Disable SubscribeSubject NextRewardPosition => #14
    #13, #14 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #16
      Expression: Item2-Item1
    -> Disable Skip(Count=1) => #17
    #17, #16 -> Disable Zip
    -> Disable Condition
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> LessThan(Operand=FloatProperty(Value=0)) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> Disable BehaviorSubject RewardPositionReached
    -> Disable Condition
        WorkflowInput Source1 => #0
        SubscribeSubject RunningSpeed => #1
        SubscribeSubject MaxRewardSpeed => #2
        #1, #2 -> WithLatestFrom
        -> LessThan => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Disable IntProperty(Value=0)
    -> Disable BehaviorSubject GoReward

    Disable SubscribeSubject RewardDistance => #24
    Disable SubscribeSubject TotalDistance => #25
    #24, #25 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Multiply(Operand=FloatProperty(Value=-1))
    -> Disable MulticastSubject NextRewardPosition

    Disable SubscribeSubject RewardPositionReached => #30
    Disable SubscribeSubject TotalDistance => #31
    Disable SubscribeSubject RewardDistance => #32
    #31, #32 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Multiply(Operand=FloatProperty(Value=-1)) => #35
    #30, #35 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable MulticastSubject NextRewardPosition

GroupWorkflow LickResponse
    SubscribeSubject ROIValue => #0
    SubscribeSubject ROILickThreshold => #1
    #0, #1 -> WithLatestFrom
    -> GreaterThanOrEqual
    -> MulticastSubject ROIActivated?
    -> DistinctUntilChanged
    -> MulticastSubject Licking?

    SubscribeSubject InitTrial
    -> CreateObservable
        SubscribeSubject Licking?
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Accumulate
        -> WorkflowOutput
    -> Switch
    -> MulticastSubject LickCount

    Annotation "Licking count"(Text="Do you want to measure licks outside of hte reward region?")

Annotation Logging(Text="")
-> SubscribeSubject InitTrial
-> CreateObservable LogTrial
    GroupWorkflow Filenames
        SubscribeSubject LogPath => #0
        -> Add(Operand=StringProperty(Value=\)) => #1
        SubscribeSubject MouseName => #2
        #0 -> Timestamp
        -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
        SubscribeSubject Protocol => #6
        StringProperty(Value=Behavior) => #7
        SubscribeSubject MouseName => #8
        #1, #2, #5, #6, #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
        -> Add(Operand=StringProperty(Value=Shaders_.csv))
        -> BehaviorSubject ShadersFilename
        #10 -> Add(Operand=StringProperty(Value=Rw_.csv))
        -> BehaviorSubject RewardFilename
        #10 -> Add(Operand=StringProperty(Value=CameraData_.csv))
        -> BehaviorSubject CameraDataFilename
        #10 -> Add(Operand=StringProperty(Value=Video_.avi))
        -> BehaviorSubject VideoFilename

    SubscribeSubject Draw => #1
    SubscribeSubject HarpTimestamp => #2
    #1, #2 -> WithLatestFrom => #3
    GroupWorkflow CameraPositionZ => #4
        SubscribeSubject CameraPosition
        -> MemberSelector(Selector=Z)
        -> WorkflowOutput
    #3, #4 -> WithLatestFrom => #5
    SubscribeSubject RewardDistance => #6
    #5, #6 -> WithLatestFrom => #7
    SubscribeSubject TotalDistance => #8
    #7, #8 -> WithLatestFrom => #9
    GroupWorkflow Speed => #10
        SubscribeSubject TotalDistance => #0
        -> Skip(Count=1) => #1
        #0, #1 -> Zip
        -> Subtract
        -> WorkflowOutput
    #9, #10 -> WithLatestFrom => #11
    GroupWorkflow DistanceToOcclusion => #12
        SubscribeSubject TotalDistance => #0
        SubscribeSubject TrialAttributes
        -> MemberSelector(Selector=OcclusionStart) => #2
        #0, #2 -> WithLatestFrom
        -> Subtract
        -> WorkflowOutput
    #11, #12 -> WithLatestFrom => #13
    GroupWorkflow DistanceToMinReappearance => #14
        SubscribeSubject TotalDistance => #0
        SubscribeSubject TrialAttributes
        -> MemberSelector(Selector=MinReappearance) => #2
        #0, #2 -> WithLatestFrom
        -> Subtract
        -> WorkflowOutput
    #13, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
      Expression:
        new (
          Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Timestamp,
          Item1.Item1.Item1.Item1.Item1.Item2 as Position,
          Item1.Item1.Item1.Item1.Item2 as RewardDistance,
          Item1.Item1.Item1.Item2 as WheelDistance,
          Item1.Item1.Item2 as WheelSpeed,
          Item1.Item2 as DistanceToOclusion,
          Item2 as DistanceToReapearance

        )
    SubscribeSubject ShadersFilename
    -> PropertyMapping(FileName) => #18
    #16, #18 -> Bonsai.IO.CsvWriter => #19
      FileName=.\data\PD004\2026_07_28\\passive_training\Behavior\passive_training_PD004_Shaders_.csv
      Append=false
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
    SubscribeSubject ShadersFilename => #20
    #19, #20 -> SubscribeWhen

    SubscribeSubject GoReward
    -> Skip(Count=1) => #23
    SubscribeSubject HarpTimestamp => #24
    #23, #24 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #27
      Expression:
        new(
        it as RewardTime
        )
    SubscribeSubject RewardFilename
    -> PropertyMapping(FileName) => #29
    #27, #29 -> Bonsai.IO.CsvWriter => #30
      FileName=.\data\PD004\2026_07_28\\passive_training\Behavior\passive_training_PD004_Rw_.csv
      Append=false
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
    SubscribeSubject RewardFilename => #31
    #30, #31 -> SubscribeWhen

    SubscribeSubject FrameData => #33
    SubscribeSubject HarpTimestamp => #34
    #33, #34 -> WithLatestFrom => #35
    -> MemberSelector(Selector=Item2) => #36
    #35 -> MemberSelector(Selector=Item1.Metadata.embeddedFrameCounter) => #37
    #36, #37 -> Zip => #38
    SubscribeSubject ROIValue => #39
    #38, #39 -> WithLatestFrom => #40
    SubscribeSubject ROIActivated? => #41
    #40, #41 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression:
        new(
          Item1.Item1.Item1 as Timestamp,
          Item1.Item1.Item2 as FrameNumber,
          Item1.Item2 as ROIValue,
          Item2 as IsLicking
        )
    SubscribeSubject CameraDataFilename
    -> PropertyMapping(FileName) => #45
    #43, #45 -> Bonsai.IO.CsvWriter => #46
      FileName=.\data\PD004\2026_07_28\\passive_training\Behavior\passive_training_PD004_CameraData_.csv
      Append=false
      Overwrite=false
      Suffix=FileCount
      IncludeHeader=true
    SubscribeSubject CameraDataFilename => #47
    #46, #47 -> SubscribeWhen

    SubscribeSubject FrameData
    -> MemberSelector(Selector=Image) => #50
    SubscribeSubject VideoFilename
    -> PropertyMapping(FileName) => #52
    #50, #52 -> Bonsai.Vision.VideoWriter => #53
      FileName=.\data\PD004\2026_07_28\\passive_training\Behavior\passive_training_PD004_Video_.avi
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    SubscribeSubject VideoFilename => #54
    #53, #54 -> SubscribeWhen
-> Switch

Bonsai.Shaders.RenderFrame
-> GroupWorkflow MyCubemapView
    WorkflowInput Source1 => #0
    SubscribeSubject CameraPosition
    -> PropertyMapping(Eye) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-0), NearClip=0.01, FarClip=20, Light(X=0, Y=0, Z=0)) => #3
    -> MemberSelector(Selector=ViewMatrix) => #4
    SubscribeSubject CameraOrientation
    -> PropertyMapping(Angle) => #6
    #4, #6 -> Bonsai.Shaders.RotateY(Order=Append, Angle=0) => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item2 as ViewMatrix,
        Item1.ProjectionMatrix as ProjectionMatrix,
        Item1.Light as Light
        )
    -> WorkflowOutput
-> PublishSubject Draw
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #17
-> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicShader, TextureName="", TextureTarget=Texture2D)
-> Disable Bonsai.Shaders.DrawMesh(ShaderName=PanoramicShader, MeshName=PanoramicQuad)
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))
#17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.2, Height=0.15, Rotation(X=0, Y=45, Z=0), Translation(X=-0.08, Y=0, Z=-0.048))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
#17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.2, Height=0.15, Rotation(X=0, Y=-45, Z=0), Translation(X=0.08, Y=0, Z=-0.048))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
-> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)

Disable SubscribeSubject GoReward
-> Disable Skip(Count=1)
-> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=10000, Offset=0, Phase=0)
-> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)

SubscribeSubject TrialFile
-> PropertyMapping(FileName) => #31
SubscribeSubject TrialNr
-> Add(Operand=IntProperty(Value=1))
-> PropertyMapping(SkipRows) => #34
#31, #34 -> Bonsai.IO.CsvReader(FileName=Trials\trials.csv, ScanPattern="%i,%s,%d,%d,%d,%d,%i,%i", SkipRows=1)
-> Take(Count=1)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      Item1 as TrialNumber,
      Item2 as TrialJsonFile,
      Item3 as MinReappearance,
      Item4 as MaxReappearance,
      Item5 as OcclusionStart,
      Item6 as CorridorSize,
      Item7 as IsPassiveReward
    )
-> MulticastSubject TrialAttributes
-> GroupWorkflow InitTrial => #39
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=MinReappearance)
    -> MulticastSubject RewardDistance => #2
    #0 -> IntProperty(Value=0)
    -> MulticastSubject InitTrial => #4
    #0, #2, #4 -> Zip
    -> MemberSelector(Selector=Item1)
    -> Disable Take(Count=1)
    -> WorkflowOutput
-> Condition IsPassiveTrial?
    WorkflowInput Source1
    -> MemberSelector(Selector=IsPassiveReward)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> SelectMany RunPassiveTrial => #41
    SubscribeSubject TotalDistance => #0
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MinReappearance) => #2
    #0, #2 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> IntProperty(Value=1)
    -> MulticastSubject GoReward

    SubscribeSubject TotalDistance => #8
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=CorridorSize) => #10
    #8, #10 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
#39 -> Condition IsActiveTrial?
    WorkflowInput Source1
    -> MemberSelector(Selector=IsPassiveReward)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> SelectMany RunActiveTrial => #43
    SubscribeSubject TotalDistance => #0
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MinReappearance) => #2
    #0, #2 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Licking? => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Take(Count=1)
    -> IntProperty(Value=1)
    -> MulticastSubject GoReward

    SubscribeSubject TotalDistance => #9
    SubscribeSubject TrialAttributes
    -> MemberSelector(Selector=MaxReappearance) => #11
    #9, #11 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
#41, #43 -> Merge
-> SelectMany EndTrial
    WorkflowInput Source1
    -> IntProperty(Value=1)
    -> MulticastSubject EndTrial => #2
    SubscribeSubject TrialNr => #3
    #2, #3 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNr
    -> Take(Count=1)
    -> WorkflowOutput
-> Take(Count=1) => #46
SubscribeSubject NumberOfTrials
-> PropertyMapping(Count) => #48
#46, #48 -> RepeatCount(Count=240) => #49
Bonsai.Windows.Input.KeyDown(Filter=T, SuppressRepetitions=false) => #50
#49, #50 -> SubscribeWhen

SubscribeSubject Licking?
SubscribeSubject RewardDuration
SubscribeSubject TotalDistance
SubscribeSubject TrialAttributes
SubscribeSubject ROIValue
SubscribeSubject InitTrial
SubscribeSubject GoReward

SubscribeSubject FrameData
-> MemberSelector(Selector=Image)
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)
