WorkflowBuilder(Version=2.9.0)
GroupWorkflow Init
    IntProperty(Value=0) => #0
    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> IntProperty(Value=0) => #2
    #0, #2 -> Merge => #3
    ExternalizedMapping(Path(DisplayName=SceneFile)) => #4
    #3, #4 -> SelectMany
        ExternalizedMapping(Path)
        -> Bonsai.IO.ReadAllText(Path=Protocols\kerem_settings.yaml)
        -> VRCorridorSchema.DeserializeFromYaml(Type=TypeMapping<VRCorridorSchema.VRCorridorSchema>)
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject TaskProperties

    ExternalizedMapping(Value(DisplayName="RewardDuration (ms)"))
    -> IntProperty(Value=500)
    -> BehaviorSubject RewardDuration

    ExternalizedMapping(Value(DisplayName="RewardDistance (m)"))
    -> FloatProperty(Value=0.5)
    -> BehaviorSubject RewardDistance

    ExternalizedMapping(Value(DisplayName="MaxRewardSpeed (m/s)"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject MaxRewardSpeed

    FloatProperty(Value=1)
    -> BehaviorSubject RunningSpeed

    FloatProperty(Value=0)
    -> BehaviorSubject TotalDistance

    DoubleProperty(Value=0)
    -> BehaviorSubject WheelEncoder

    DoubleProperty(Value=0)
    -> BehaviorSubject HarpTimestamp

    SubscribeSubject RewardDistance
    -> Take(Count=1)
    -> BehaviorSubject NextRewardPosition

    FloatProperty(Value=0)
    -> BehaviorSubject TeleportToPosition

    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> BehaviorSubject CameraPosition

    FloatProperty(Value=0)
    -> BehaviorSubject CameraOrientation

GroupWorkflow InitShaders
    ExternalizedMapping(Width, Height, Location, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=320
      Height=240
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=0, Y=0)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BackWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_back.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\checkerboard2.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=FrontWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_front.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=LeftWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_left.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=RightWall
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\calibration_right.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BG_0.04_0.32_100
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\background\BG_0.04_0.32_100.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Rocks
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\floor\rocks.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PanoramicShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\panoramic.vert
          FragmentShader=Shaders\panoramic.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=PlainColorShader
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\plain_color.vert
          FragmentShader=Shaders\plain_color.frag
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=PanoramicQuad, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Cylinder, FileName=Models\cylinder.obj)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

GroupWorkflow RewardDetection
    SubscribeSubject TotalDistance
    -> Multiply(Operand=FloatProperty(Value=-1)) => #1
    SubscribeSubject NextRewardPosition => #2
    #1, #2 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: Item2-Item1
    -> Skip(Count=1) => #5
    #5, #4 -> Zip
    -> Condition
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> GreaterThanOrEqual(Operand=FloatProperty(Value=0)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> LessThan(Operand=FloatProperty(Value=0)) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> BehaviorSubject RewardPositionReached
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject RunningSpeed => #1
        SubscribeSubject MaxRewardSpeed => #2
        #1, #2 -> WithLatestFrom
        -> LessThan => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> BehaviorSubject GoReward

    SubscribeSubject RewardDistance => #12
    SubscribeSubject TotalDistance => #13
    #12, #13 -> WithLatestFrom
    -> Add
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> MulticastSubject NextRewardPosition

    SubscribeSubject RewardPositionReached => #18
    SubscribeSubject TotalDistance => #19
    SubscribeSubject RewardDistance => #20
    #19, #20 -> WithLatestFrom
    -> Add
    -> Multiply(Operand=FloatProperty(Value=-1)) => #23
    #18, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject NextRewardPosition

Disable GroupWorkflow HarpDevice
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
    ExternalizedMapping(PortName) => #1
    #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> BehaviorSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #4
    -> MemberSelector(Selector=Value.AnalogInput0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToVolt
      Expression: it * 5.0 / 4096.0
    -> MulticastSubject WheelEncoder
    #4 -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTimestamp

    Int64Property(Value=99) => #10
    SubscribeSubject HarpTimestamp => #11
    #10, #11 -> WithLatestFrom
    -> BehaviorSubject TriggerData

    Timer(DueTime=PT1S) => #14
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #22
    #14, #22 -> WithLatestFrom
    -> MulticastSubject TriggerData

    Timer(DueTime=PT5S, Period=PT2S) => #25
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.2S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
    -> MulticastSubject BehaviorCommands
    SubscribeSubject HarpTimestamp => #31
    #25, #31 -> WithLatestFrom
    -> MulticastSubject TriggerData

    SubscribeSubject GoReward => #34
    Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> IntProperty(Value=0) => #36
    #34, #36 -> Merge
    -> SelectMany GiveReward
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2)) => #2
        SubscribeSubject RewardDuration => #3
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, PulseDO2(Selector=Item2))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=500)) => #6
        #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2)) => #7
        #2, #6, #7 -> Merge
        -> Take(Count=3)
        -> WorkflowOutput
    -> MulticastSubject BehaviorCommands

Disable GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=Filepath))
    -> StringProperty(Value=.\data)
    -> BehaviorSubject LogPath

    SubscribeSubject LogPath => #3
    -> Add(Operand=StringProperty(Value=\)) => #4
    ExternalizedMapping(Value(DisplayName=MouseName)) => #5
    -> StringProperty(Value=LPE12385) => #6
    #3 -> Timestamp
    -> MemberSelector(Selector="Timestamp.Year,Timestamp.Month,Timestamp.Day")
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
      Expression: Item1.ToString() + "_" + Item2.ToString("D2") + "_" + Item3.ToString("D2") + "\"
    ExternalizedMapping(Value(DisplayName=Protocol_ID))
    -> StringProperty(Value=DN) => #11
    StringProperty(Value=Behavior) => #12
    #5 -> StringProperty(Value=LPE12385) => #13
    #4, #6, #9, #11, #12, #13 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
      Expression: Item1.ToString() + Item2.ToString() + "\" + Item3.ToString() + "\" + Item4.ToString() + "\" + Item5.ToString() + "\" + Item4.ToString() + "_" + Item6.ToString() + "_"
    -> BehaviorSubject SaveFilename
    #15 -> Add(Operand=StringProperty(Value=Rw_))
    -> BehaviorSubject RewardFilename

    SubscribeSubject Draw => #19
    SubscribeSubject HarpTimestamp => #20
    #19, #20 -> WithLatestFrom => #21
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #23
    #21, #23 -> WithLatestFrom => #24
    SubscribeSubject RewardDistance => #25
    #24, #25 -> WithLatestFrom => #26
    SubscribeSubject TotalDistance => #27
    #26, #27 -> WithLatestFrom => #28
    #27 -> Skip(Count=1) => #29
    #27, #29 -> Zip
    -> Subtract => #31
    #28, #31 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
      Expression:
        new (
          Item1.Item1.Item1.Item2 as Timestamp,
          Item1.Item1.Item2 as Position,
          Item1.Item2 as WheelDistance,
          Item2 as WheelSpeed
        )
    SubscribeSubject SaveFilename
    -> PropertyMapping(FileName) => #35
    #33, #35 -> Bonsai.IO.CsvWriter(FileName=.\data\LPE12385\2025_10_06\\DN\Behavior\DN_LPE12385_, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #36
    SubscribeSubject SaveFilename => #37
    #36, #37 -> SubscribeWhen
    -> WorkflowOutput

    SubscribeSubject GoReward => #40
    SubscribeSubject HarpTimestamp => #41
    #40, #41 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #43
    SubscribeSubject RewardFilename
    -> PropertyMapping(FileName) => #45
    #43, #45 -> Bonsai.IO.CsvWriter(FileName=.\data\LPE12385\2025_10_06\\DN\Behavior\DN_LPE12385_Rw_, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #46
    SubscribeSubject RewardFilename => #47
    #46, #47 -> SubscribeWhen

GroupWorkflow "Static 3D Scene"
    SubscribeSubject Draw
    -> GroupWorkflow Floor
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #1, #0 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-1.57079983
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Rocks, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=-0.04
              TranslationZ=-2.82743979
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.63
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    SubscribeSubject Draw
    -> GroupWorkflow RewardFloor
        WorkflowInput Source1 => #0
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #1
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-1.99999893
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-2.499999
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-2.999999
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.039
              TranslationZ=-3.499999
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=0.63
              ScaleY=0.1
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    SubscribeSubject Draw
    -> GroupWorkflow RewardLeft
        WorkflowInput Source1 => #0
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #1
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-1.99999893
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-2.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-2.999999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.0489
              TranslationY=0
              TranslationZ=-3.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    SubscribeSubject Draw
    -> GroupWorkflow LeftWall
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #1, #0 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-1.57079983
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-2.82743979
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    SubscribeSubject Draw
    -> GroupWorkflow RewardLeft
        WorkflowInput Source1 => #0
        ExternalizedMapping(TextureName, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #1
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-1.99999893
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-2.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-2.999999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=Floor, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                SubscribeSubject RewardDistance => #3
                #0, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #2, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                SubscribeSubject NextRewardPosition => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #8, #11 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.0489
              TranslationY=0
              TranslationZ=-3.499999
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    SubscribeSubject Draw
    -> GroupWorkflow RightWall
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          TextureName
          RepeatInterval
          TranslationX
          TranslationY
          RotationZ
          RotationY
          RotationX
          ScaleX
          ScaleY
          ScaleZ
          Ambient
          Diffuse
          Specular
          MeshName
          TranslateZ
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-0.9424799
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #1, #0 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-1.57079983
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))
        #0, #1 -> GroupWorkflow DrawTexture
            WorkflowInput Source1 => #0
            ExternalizedMapping(TextureName) => #1
            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #2
            ExternalizedMapping(Repeat#, RepeatInterval, TranslateZ) => #3
            #0, #3 -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Repeat#)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=RepeatInterval)) => #3
                #0, #3 -> FloatProperty(Value=0.62832) => #4
                #2, #4 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject TotalDistance => #8
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Multiply(Operand=FloatProperty(Value=-1)) => #11
                #4, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Math.Floor(Item2/Item1)*Item1
                ExternalizedMapping(Value(DisplayName=TranslateZ)) => #14
                #0, #14 -> FloatProperty(Value=0.94248) => #15
                #7, #13, #15 -> Zip
                -> Add
                -> WorkflowOutput
            -> PropertyMapping(TranslationZ) => #5
            ExternalizedMapping(TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, ScaleZ, Ambient, Diffuse, Specular, MeshName) => #6
            #2, #5, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.049
              TranslationY=0
              TranslationZ=-2.82743979
              RotationZ=0
              RotationY=-90
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> WorkflowOutput

            SubscribeSubject TotalDistance
            -> Multiply(Operand=FloatProperty(Value=0))

    Disable SubscribeSubject Draw
    -> Disable SelectMany DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                SubscribeSubject RewardDistance => #4
                #3, #4 -> WithLatestFrom
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject NextRewardPosition => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #10
                #7, #10 -> Zip
                -> Add => #12
                #1, #2, #12 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.045
              TranslationY=0
              TranslationZ=-4.999999
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=3)
            -> Take(Count=1)
            -> WorkflowOutput
            #4 -> MemberSelector(Selector=Item3)
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput

Disable GroupWorkflow HarpWheelNavigation
    GroupWorkflow ProcessWheelData
        ExternalizedMapping("WheelEncoderMin (V)", "WheelEncoderMax (V)")
        -> GroupWorkflow InitWheelData
            ExternalizedMapping(Value(DisplayName="WheelEncoderMin (V)"))
            -> FloatProperty(Value=0.1)
            -> BehaviorSubject RotEncMin

            ExternalizedMapping(Value(DisplayName="WheelEncoderMax (V)"))
            -> FloatProperty(Value=4.7)
            -> BehaviorSubject RotEncMax

            IntProperty(Value=0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                0.0 as Position,
                0.0 as Diference,
                0 as Turns)
            -> BehaviorSubject WheelData

            FloatProperty(Value=0)
            -> BehaviorSubject Encoder

            BooleanProperty(Value=false)
            -> BehaviorSubject TimeOut

        SubscribeSubject WheelEncoder
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it as Position,
            0.0 as Diference,
            0 as Turns)
        -> Scan
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Position)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it > 1 ? 1.0 : it < -1 ? -1.0 : 0.0
            #3, #0 -> Zip => #4
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2.Value.Position as Position,
                Item1 as Diference,
                Item2.Accumulation.Turns + (Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))) as Turns)
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Accumulation.Diference)
            #0 -> MemberSelector(Selector=Value.Diference)
            #4 -> MemberSelector(Selector=Item1)
            #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Accumulation.Diference == Item1 ? 0 : ((Item1 > 0 ? -1 : (Item1 < 0 ? 1 : 0)))
        -> MulticastSubject WheelData

        SubscribeSubject WheelData => #6
        -> MemberSelector(Selector=Position) => #7
        SubscribeSubject RotEncMin
        -> PropertyMapping(Value) => #9
        #7, #9 -> Subtract(Operand=FloatProperty(Value=0)) => #10
        SubscribeSubject RotEncMax
        -> PropertyMapping(Value) => #12
        #10, #12 -> Divide(Operand=FloatProperty(Value=4.7)) => #13
        #6 -> MemberSelector(Selector=Turns)
        -> PropertyMapping(Value) => #15
        #13, #15 -> Add(Operand=FloatProperty(Value=11))
        -> Bonsai.Dsp.Butterworth(SampleRate=1000, Cutoff1=6, Cutoff2=0, FilterOrder=3, FilterType=LowPass)
        -> Bonsai.Dsp.Difference(Order=1) => #18
        ExternalizedMapping(Value(DisplayName="WheelPerimeter(cm)")) => #19
        #18, #19 -> Multiply(Operand=DoubleProperty(Value=0.62832)) => #20
        SubscribeSubject TimeOut
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 1 : 0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1-it
        -> PropertyMapping(Value) => #24
        #20, #24 -> Multiply(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> MulticastSubject TotalDistance
        #20 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject RunningSpeed

        Annotation UpdateEncoderLimits(Text="")
        -> SubscribeSubject WheelData
        -> MemberSelector(Selector=Position)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
          Expression: Convert.ToSingle(it)
        SubscribeSubject RotEncMin => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Numerics.Min
        -> MulticastSubject RotEncMin
        SubscribeSubject RotEncMax => #39
        #34, #39 -> WithLatestFrom
        -> Bonsai.Numerics.Max
        -> MulticastSubject RotEncMax

    SubscribeSubject TotalDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-7.01492453)
    -> MulticastSubject CameraPosition

    Disable SubscribeSubject TotalDistance => #6
    Disable SubscribeSubject TeleportToPosition => #7
    Disable SubscribeSubject TotalDistance => #8
    #7, #8 -> Disable WithLatestFrom
    -> Disable Subtract => #10
    #6, #10 -> Disable WithLatestFrom
    -> Disable Add
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        0 as X,
        0 as Y,
        -it%1.88496 as Z
        )
    -> Disable InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Disable Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.55102813)
    -> Disable MulticastSubject CameraPosition

Disable GroupWorkflow "Dynamic 3D Scene"
    Annotation 3(Text="")
    -> SubscribeSubject Draw => #1
    -> SelectMany DrawArena
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Arena) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                #0 -> MemberSelector(Selector=Item2) => #4
                -> MemberSelector(Selector=Item2.RepeatInterval) => #5
                #3, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                #4 -> MemberSelector(Selector=Item2.Translation)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it[2]
                SubscribeSubject CameraPosition
                -> MemberSelector(Selector=Z) => #12
                #5, #12 -> WithLatestFrom => #13
                Annotation #RepeatIntervals(Text="This gives the number of RepeatInterval distances that fit in the current distance travelled.") => #14
                #13, #14 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Math.Floor(Item2/Item1)
                #15, #5 -> Zip
                -> Multiply => #17
                #8, #10, #17 -> Zip
                -> Add => #19
                #1, #2, #19 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-1.88496
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.05
              ScaleY=0.4
              ScaleZ=0.5
              Ambient(X=0, Y=0, Z=1)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-2.19911981
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=3)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=3)
        -> WorkflowOutput
    #1 -> SelectMany DrawLandmarks
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Landmarks) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany DrawAll => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=2) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                #0 -> MemberSelector(Selector=Item2) => #4
                -> MemberSelector(Selector=Item2.RepeatInterval) => #5
                #3, #5 -> Zip
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #8
                #4 -> MemberSelector(Selector=Item2.Translation)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it[2]
                SubscribeSubject CameraPosition
                -> MemberSelector(Selector=Z) => #12
                #5, #12 -> WithLatestFrom => #13
                Annotation #RepeatIntervals(Text="This gives the number of RepeatInterval distances that fit in the current distance travelled.") => #14
                #13, #14 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Math.Floor(Item2/Item1)
                #15, #5 -> Zip
                -> Multiply => #17
                #8, #10, #17 -> Zip
                -> Add => #19
                #1, #2, #19 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0.045
              TranslationY=0
              TranslationZ=-2.51328
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=0, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=FloatProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=1)
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput
    #1 -> SelectMany DrawRewards
        WorkflowInput Source1 => #0
        SubscribeSubject TaskProperties => #1
        ExternalizedMapping(Selector) => #2
        #1, #2 -> MemberSelector(Selector=Reward) => #3
        -> Concat => #4
        #0, #4 -> CombineLatest
        -> InputMapping(Selector=it, Repetitions(Selector=Item2.Repetitions))
        -> SelectMany => #7
            ExternalizedMapping(Count(DisplayName=Repetitions))
            -> Range(Start=0, Count=4) => #1
            WorkflowInput Source1 => #2
            #1, #2 -> WithLatestFrom
            -> GroupWorkflow AddTranslation => #4
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item2.Item1) => #1
                #0 -> MemberSelector(Selector=Item2.Item2) => #2
                #0 -> MemberSelector(Selector=Item1) => #3
                SubscribeSubject RewardDistance => #4
                #3, #4 -> WithLatestFrom
                -> Multiply
                -> Multiply(Operand=FloatProperty(Value=-1)) => #7
                SubscribeSubject NextRewardPosition => #8
                #0, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #10
                #7, #10 -> Zip
                -> Add => #12
                #1, #2, #12 -> Zip
                -> WorkflowOutput
            -> Condition "Not Textured?"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping
              Selector=Item1
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0], Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0], Item2.SpecularColor[1], Item2.SpecularColor[2]")
            -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-0.045
              TranslationY=0
              TranslationZ=-4.999999
              RotationZ=0
              RotationY=89.95438
              RotationX=0
              ScaleX=0.1
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=0)
              Diffuse(X=1, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #4 -> Condition Textured? => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.Texture)
                -> NotEqual(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> InputMapping(Selector=Item1, TextureName(Selector=Item2.Texture))
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=BG_0.04_0.32_100, TextureTarget=Texture2D) => #10
            #8 -> PropertyMapping => #11
              MeshName(Selector=Item2.MeshType)
              TranslationX(Selector=Item2.Translation[0])
              TranslationY(Selector=Item2.Translation[1])
              TranslationZ(Selector=Item3)
              ScaleX(Selector=Item2.Scale[0])
              ScaleY(Selector=Item2.Scale[1])
              ScaleZ(Selector=Item2.Scale[2])
              RotationX(Selector=Item2.Rotation[0])
              RotationY(Selector=Item2.Rotation[1])
              RotationZ(Selector=Item2.Rotation[2])
              Ambient(Selector="Item2.AmbientColor[0],Item2.AmbientColor[1],Item2.AmbientColor[2]")
              Diffuse(Selector="Item2.DiffuseColor[0],Item2.DiffuseColor[1],Item2.DiffuseColor[2]")
              Specular(Selector="Item2.SpecularColor[0],Item2.SpecularColor[1],Item2.SpecularColor[2]")
            #10, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.049
              TranslationY=0
              TranslationZ=-6.59735966
              RotationZ=0
              RotationY=-89.95438
              RotationX=0
              ScaleX=0.63
              ScaleY=0.08
              ScaleZ=0.1
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              MeshName=Plane
            #7, #12 -> Merge => #13
            #2 -> MemberSelector(Selector=Item2.Repetitions)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #16
            #13, #16 -> Skip(Count=3)
            -> Take(Count=1)
            -> WorkflowOutput
            #4 -> MemberSelector(Selector=Item3)
        #3 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #9
        #7, #9 -> Take(Count=2)
        -> WorkflowOutput

    SubscribeSubject Draw
    -> TimeInterval
    -> MemberSelector(Selector=Interval.TotalMilliseconds)
    -> WorkflowOutput

Disable GroupWorkflow ManualNavigation
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> FloatProperty(Value=0.1) => #1
    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> FloatProperty(Value=-0.1) => #3
    FloatProperty(Value=0) => #4
    #1, #3, #4 -> Merge
    -> Accumulate
    -> BehaviorSubject CameraOrientation

    Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> FloatProperty(Value=-1) => #9
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #11
    FloatProperty(Value=0) => #12
    #9, #11, #12 -> Merge => #13
    SubscribeSubject CameraOrientation => #14
    #13, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0.198669344, Y=0, Z=-0.9800666)
    -> Accumulate
    -> BehaviorSubject CameraPosition

GroupWorkflow MouseWheelNavigation
    Bonsai.Windows.Input.MouseWheel => #0
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> FloatProperty(Value=0.01) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> LessThan(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> FloatProperty(Value=-0.01) => #4
    FloatProperty(Value=0) => #5
    SubscribeSubject TeleportToPosition => #6
    SubscribeSubject CameraPosition
    -> MemberSelector(Selector=Z) => #8
    #6, #8 -> WithLatestFrom
    -> Subtract => #10
    #2, #4, #5, #10 -> Merge
    -> BehaviorSubject DistanceAdded => #12
    SubscribeSubject CameraOrientation => #13
    #12, #13 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item1 * Math.Sin(Item2) as X,
        0.0 as Y,
        Item1 * Math.Cos(Item2) as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=-0, Y=0, Z=-0.01)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.X as X,
        it.Y as Y,
        it.Z % 10.0 as Z
        )
    -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1.61999881)
    -> MulticastSubject CameraPosition

    SubscribeSubject Draw => #23
    SubscribeSubject TotalDistance => #24
    #23, #24 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #26
    -> Skip(Count=1) => #27
    #27, #26 -> Zip
    -> Subtract
    -> MulticastSubject RunningSpeed

    SubscribeSubject DistanceAdded
    -> Multiply(Operand=FloatProperty(Value=-1))
    -> Accumulate
    -> MulticastSubject TotalDistance

Bonsai.Shaders.RenderFrame
-> GroupWorkflow MyCubemapView
    WorkflowInput Source1 => #0
    SubscribeSubject CameraPosition
    -> PropertyMapping(Eye) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-1.61999881), NearClip=0.01, FarClip=20, Light(X=0, Y=0, Z=0)) => #3
    -> MemberSelector(Selector=ViewMatrix) => #4
    SubscribeSubject CameraOrientation
    -> PropertyMapping(Angle) => #6
    #4, #6 -> Bonsai.Shaders.RotateY(Order=Append, Angle=0) => #7
    #3, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new (
        Item2 as ViewMatrix,
        Item1.ProjectionMatrix as ProjectionMatrix,
        Item1.Light as Light
        )
    -> WorkflowOutput
-> PublishSubject Draw
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=PanoramicShader, TextureName="", TextureTarget=Texture2D)
-> Bonsai.Shaders.DrawMesh(ShaderName=PanoramicShader, MeshName=PanoramicQuad)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20, Height=100, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0))

Disable Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames)
-> Disable MemberSelector(Selector=Image)
-> Disable Bonsai.Dsp.Average
-> Disable MemberSelector(Selector=Val0)

SubscribeSubject GoReward
-> Bonsai.Dsp.FunctionGenerator(BufferLength=4410, Frequency=1000, Waveform=Sine, SampleRate=44100, Amplitude=10000, Offset=0, Phase=0)
-> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers / Headphones (Realtek Audio)", SampleRate=44100, State=Playing)

Disable GroupWorkflow CountLicks
    SubscribeSubject LickActivity => #0
    SubscribeSubject InRewardZone => #1
    #0, #1 -> WithLatestFrom
    -> BitwiseAnd
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject nLicks => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Disable Divide(Operand=IntProperty(Value=1))
    -> MulticastSubject nLicks
    -> WorkflowOutput

Disable GroupWorkflow LickResponse
    SubscribeSubject nLicks => #0
    SubscribeSubject minLicks
    -> PropertyMapping(Value) => #2
    #0, #2 -> GreaterThanOrEqual(Operand=FloatProperty(Value=3))
    -> DistinctUntilChanged
    -> MulticastSubject lickResponse
