WorkflowBuilder(Version=2.8.5)
GroupWorkflow Gui
    SubscribeSubject RoisActivity
    -> Condition Arena0? => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #2
    #1 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #4
    #2, #4 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=345, Y=234)
            Point(X=345, Y=237)
            Point(X=344, Y=240)
            Point(X=343, Y=243)
            Point(X=341, Y=245)
            Point(X=339, Y=247)
            Point(X=337, Y=249)
            Point(X=335, Y=250)
            Point(X=332, Y=251)
            Point(X=330, Y=251)
            Point(X=327, Y=251)
            Point(X=324, Y=250)
            Point(X=322, Y=249)
            Point(X=320, Y=247)
            Point(X=318, Y=245)
            Point(X=316, Y=243)
            Point(X=315, Y=240)
            Point(X=314, Y=237)
            Point(X=314, Y=234)
            Point(X=314, Y=232)
            Point(X=315, Y=229)
            Point(X=316, Y=226)
            Point(X=318, Y=224)
            Point(X=320, Y=222)
            Point(X=322, Y=220)
            Point(X=324, Y=219)
            Point(X=327, Y=218)
            Point(X=330, Y=218)
            Point(X=332, Y=218)
            Point(X=335, Y=219)
            Point(X=337, Y=220)
            Point(X=339, Y=222)
            Point(X=341, Y=224)
            Point(X=343, Y=226)
            Point(X=344, Y=229)
            Point(X=345, Y=232)
          Rect(X=314, Y=218, Width=32, Height=34)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #6
    SubscribeSubject RoisActivity
    -> Condition Arena1? => #8
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #9
    #8 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #11
    #9, #11 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi(Point(X=507, Y=42), Point(X=530, Y=42), Point(X=530, Y=75), Point(X=507, Y=75))
          Rect(X=507, Y=42, Width=24, Height=34)
          Activity(Val0=255, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #13
    SubscribeSubject RoisActivity
    -> Condition Arena2? => #15
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #16
    #15 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #18
    #16, #18 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=369, Y=238)
            Point(X=369, Y=241)
            Point(X=368, Y=244)
            Point(X=367, Y=247)
            Point(X=365, Y=250)
            Point(X=362, Y=252)
            Point(X=360, Y=254)
            Point(X=357, Y=255)
            Point(X=354, Y=256)
            Point(X=350, Y=256)
            Point(X=347, Y=256)
            Point(X=344, Y=255)
            Point(X=341, Y=254)
            Point(X=339, Y=252)
            Point(X=336, Y=250)
            Point(X=334, Y=247)
            Point(X=333, Y=244)
            Point(X=332, Y=241)
            Point(X=332, Y=238)
            Point(X=332, Y=235)
            Point(X=333, Y=232)
            Point(X=334, Y=229)
            Point(X=336, Y=226)
            Point(X=339, Y=224)
            Point(X=341, Y=222)
            Point(X=344, Y=221)
            Point(X=347, Y=220)
            Point(X=350, Y=220)
            Point(X=354, Y=220)
            Point(X=357, Y=221)
            Point(X=360, Y=222)
            Point(X=362, Y=224)
            Point(X=365, Y=226)
            Point(X=367, Y=229)
            Point(X=368, Y=232)
            Point(X=369, Y=235)
          Rect(X=332, Y=220, Width=38, Height=37)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
        RegionActivity
          Roi
            Point(X=308, Y=346)
            Point(X=308, Y=349)
            Point(X=307, Y=353)
            Point(X=306, Y=357)
            Point(X=304, Y=360)
            Point(X=301, Y=363)
            Point(X=299, Y=365)
            Point(X=296, Y=367)
            Point(X=293, Y=368)
            Point(X=290, Y=368)
            Point(X=286, Y=368)
            Point(X=283, Y=367)
            Point(X=280, Y=365)
            Point(X=278, Y=363)
            Point(X=275, Y=360)
            Point(X=273, Y=357)
            Point(X=272, Y=353)
            Point(X=271, Y=349)
            Point(X=271, Y=346)
            Point(X=271, Y=342)
            Point(X=272, Y=338)
            Point(X=273, Y=334)
            Point(X=275, Y=331)
            Point(X=278, Y=328)
            Point(X=280, Y=326)
            Point(X=283, Y=324)
            Point(X=286, Y=323)
            Point(X=290, Y=323)
            Point(X=293, Y=323)
            Point(X=296, Y=324)
            Point(X=299, Y=326)
            Point(X=301, Y=328)
            Point(X=304, Y=331)
            Point(X=306, Y=334)
            Point(X=307, Y=338)
            Point(X=308, Y=342)
          Rect(X=271, Y=323, Width=38, Height=46)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #20
    SubscribeSubject RoisActivity
    -> Condition Arena3? => #22
        WorkflowInput Source1
        -> MemberSelector(Selector=ArenaId) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> MemberSelector(Selector=CroppedArena) => #23
    #22 -> MemberSelector(Selector=Rois)
    -> PropertyMapping(Value) => #25
    #23, #25 -> PropertySource<MyTransform,Bonsai.Vision.RegionActivityCollection>
      MemberName=RegionActivityCollection
      Value
        RegionActivity
          Roi
            Point(X=337, Y=206)
            Point(X=337, Y=210)
            Point(X=336, Y=213)
            Point(X=335, Y=216)
            Point(X=334, Y=219)
            Point(X=332, Y=222)
            Point(X=330, Y=224)
            Point(X=328, Y=226)
            Point(X=326, Y=227)
            Point(X=324, Y=227)
            Point(X=321, Y=227)
            Point(X=319, Y=226)
            Point(X=317, Y=224)
            Point(X=315, Y=222)
            Point(X=313, Y=219)
            Point(X=312, Y=216)
            Point(X=311, Y=213)
            Point(X=310, Y=210)
            Point(X=310, Y=206)
            Point(X=310, Y=202)
            Point(X=311, Y=199)
            Point(X=312, Y=196)
            Point(X=313, Y=193)
            Point(X=315, Y=190)
            Point(X=317, Y=188)
            Point(X=319, Y=186)
            Point(X=321, Y=185)
            Point(X=324, Y=185)
            Point(X=326, Y=185)
            Point(X=328, Y=186)
            Point(X=330, Y=188)
            Point(X=332, Y=190)
            Point(X=334, Y=193)
            Point(X=335, Y=196)
            Point(X=336, Y=199)
            Point(X=337, Y=202)
          Rect(X=310, Y=185, Width=28, Height=43)
          Activity(Val0=0, Val1=0, Val2=0, Val3=0)
    -> VisualizerMapping => #27
    #6, #13, #20, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    GroupWorkflow RoiActivity
        SubscribeSubject RoisActivity
        -> Condition Arena0?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #3
        SubscribeSubject RoisActivity
        -> Condition Arena1?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #7
        SubscribeSubject RoisActivity
        -> Condition Arena2?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #11
        SubscribeSubject RoisActivity
        -> Condition Arena3?
            WorkflowInput Source1
            -> MemberSelector(Selector=ArenaId) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=RoiActivity.RoiActivity)
        -> VisualizerMapping => #15
        #3, #7, #11, #15 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #31
    #29, #31 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow LogData
    SubscribeSubject RoisActivity
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteHeader => #2
        WorkflowInput Source1
        -> Take(Count=1)
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData
        -> GroupWorkflow FileHeader
            StringProperty(Value="Centroid.X, Centroid.Y") => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
            -> InputMapping(Selector=it, Count(Selector=Rows))
            -> SelectMany => #4
                ExternalizedMapping(Count)
                -> Range(Start=0, Count=1) => #1
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: ", Roi" + Convert.ToString(it)
                #1 -> Last => #3
                #2, #3 -> BufferTrigger(Count=nil)
                -> Add
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=", LED") => #5
            #0, #4, #5 -> Zip
            -> Add
            -> WorkflowOutput
        -> Take(Count=1) => #6
        SubscribeSubject ArenaData
        -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename
          Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
        -> PropertyMapping(FileName) => #9
        #6, #9 -> Bonsai.IO.CsvWriter(FileName=Arena0.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false) => #10
        SubscribeSubject ArenaData => #11
        #10, #11 -> SubscribeWhen
        -> WorkflowOutput
    SubscribeSubject MyArenas
    -> MemberSelector(Selector=Arenas.Count)
    -> PropertyMapping(Count) => #5
    #2, #5 -> Take(Count=4)
    -> IntProperty(Value=0) => #7
    SubscribeSubject RoisActivity
    -> GroupBy(KeySelector=ArenaId, ElementSelector=it)
    -> SelectMany WriteRow
        WorkflowInput Source1
        -> Merge
        -> BehaviorSubject ArenaData

        SubscribeSubject ArenaData => #3
        -> MemberSelector(Selector=Centroid) => #4
        #3 -> MemberSelector(Selector=RoiActivity.RoiActivityDetected)
        -> InputMapping(Selector=it, Value(Selector=Rows))
        -> SelectMany LogRoiState => #7
            Annotation Note
              Text: Because the rois are a list that can have different lengths for each arena, the activity of all the rois has to be converted into a string first and then saved as a string.

            WorkflowInput Source1
            -> BehaviorSubject Buffer

            ExternalizedMapping(Value)
            -> IntProperty(Value=1)
            -> BehaviorSubject RoiSize

            SubscribeSubject RoiSize
            -> Range(Start=0, Count=1) => #7
            SubscribeSubject Buffer
            -> Bonsai.Dsp.Transpose => #9
            #7, #9 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Value(Selector=Item1))
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression: Convert.ToString(it.Val0) + ","
            SubscribeSubject RoiSize
            -> PropertyMapping(Count) => #15
            #13, #15 -> BufferCount(Count=1, Skip=nil) => #16
            -> Add
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #18
              Expression: it.Substring(0,it.Length-1)
            SubscribeSubject RoiSize => #19
            #18, #19 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
            #16 -> MemberSelector(Selector=Count)
        #3 -> MemberSelector(Selector=RoiActivity.ActivityDetected) => #8
        #4, #7, #8 -> Zip => #9
        SubscribeSubject ArenaData
        -> Bonsai.Scripting.Expressions.ExpressionTransform ArenaFilename
          Expression: "Arena" + Convert.ToSTring(it.ArenaId) + ".csv"
        -> PropertyMapping(FileName) => #12
        #9, #12 -> Bonsai.IO.CsvWriter(FileName=Arena3.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false) => #13
        SubscribeSubject ArenaData => #14
        #13, #14 -> SubscribeWhen
        -> WorkflowOutput
    -> IntProperty(Value=0) => #11
    #7, #11 -> Concat => #12
    Timer(DueTime=PT1S, Period=PT0S) => #13
    #12, #13 -> SubscribeWhen

    SubscribeSubject Frames
    -> Bonsai.Vision.VideoWriter => #16
      FileName=Video.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=60
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Timer(DueTime=PT1S, Period=PT0S) => #17
    #16, #17 -> SubscribeWhen

IntProperty(Value=0)
-> IncludeWorkflow(Path=CF.BonFly:LoadArenaSettings.bonsai, Path=ArenaList2.json)
-> BehaviorSubject MyArenas

Bonsai.Vision.FileCapture(FileName=C:\Users\hgmar\Downloads\cam07_2024-10-31T10_13_40.avi, PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
-> BehaviorSubject Frames

SubscribeSubject Frames
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Threshold(ThresholdValue=90, MaxValue=255, ThresholdType=BinaryInv)
-> BehaviorSubject "Processed Frames"

SubscribeSubject "Processed Frames" => #11
SubscribeSubject MyArenas => #12
#11, #12 -> WithLatestFrom
-> CreateObservable ProcessArenas
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item2)
    -> MemberSelector(Selector=Arenas)
    -> Concat => #3
    #0 -> MemberSelector(Selector=Item1) => #4
    #3, #4 -> WithLatestFrom
    -> InputMapping(Selector=it, RoiCount(Selector=Item1.Rois.Count))
    -> SelectMany ProcessArena
        WorkflowInput Source1 => #0
        -> GroupWorkflow CropArena => #1
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            #0 -> MemberSelector(Selector=Item1)
            -> IncludeWorkflow(Path=CF.BonFly:ArenaRegionToRegions.bonsai) => #3
            #1, #3 -> Zip
            -> InputMapping(Selector=Item1, Regions(Selector=Item2))
            -> Bonsai.Vision.CropPolygon
              Regions(ArrayOfPoint(Point(X=732, Y=857), Point(X=1286, Y=857), Point(X=1286, Y=1396), Point(X=732, Y=1396)))
              MaskType=ToZero
              FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
            -> WorkflowOutput
        #0 -> MemberSelector(Selector=Item1)
        -> IncludeWorkflow(Path=CF.BonFly:ArenaRoisToRegions.bonsai) => #3
        #1, #3 -> Zip => #4
        -> InputMapping(Selector=Item1, Regions(Selector=Item2)) => #5
        ExternalizedMapping(Operation) => #6
        #5, #6 -> Bonsai.Vision.RoiActivity => #7
          Regions
            ArrayOfPoint
              Point(X=337, Y=206)
              Point(X=337, Y=210)
              Point(X=336, Y=213)
              Point(X=335, Y=216)
              Point(X=334, Y=219)
              Point(X=332, Y=222)
              Point(X=330, Y=224)
              Point(X=328, Y=226)
              Point(X=326, Y=227)
              Point(X=324, Y=227)
              Point(X=321, Y=227)
              Point(X=319, Y=226)
              Point(X=317, Y=224)
              Point(X=315, Y=222)
              Point(X=313, Y=219)
              Point(X=312, Y=216)
              Point(X=311, Y=213)
              Point(X=310, Y=210)
              Point(X=310, Y=206)
              Point(X=310, Y=202)
              Point(X=311, Y=199)
              Point(X=312, Y=196)
              Point(X=313, Y=193)
              Point(X=315, Y=190)
              Point(X=317, Y=188)
              Point(X=319, Y=186)
              Point(X=321, Y=185)
              Point(X=324, Y=185)
              Point(X=326, Y=185)
              Point(X=328, Y=186)
              Point(X=330, Y=188)
              Point(X=332, Y=190)
              Point(X=334, Y=193)
              Point(X=335, Y=196)
              Point(X=336, Y=199)
              Point(X=337, Y=202)
          Operation=Avg
        ExternalizedMapping(RoiCount) => #8
        #7, #8 -> SelectMany GetRoiActivityData => #9
            WorkflowInput Source1
            -> BehaviorSubject Rois

            ExternalizedMapping(Value(DisplayName=RoiCount))
            -> IntProperty(Value=1)
            -> BehaviorSubject RoisCount

            SubscribeSubject Rois
            -> Concat
            -> MemberSelector(Selector=Activity.Val0) => #7
            -> GroupWorkflow RoiActivity => #8
                WorkflowInput Source1 => #0
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #2
                #0, #2 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            #7 -> GroupWorkflow RoiActivityDetected => #9
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: Convert.ToInt32(it)
                SubscribeSubject RoisCount
                -> PropertyMapping(Count) => #4
                #2, #4 -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
                -> Bonsai.Dsp.Transpose
                -> WorkflowOutput
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0) => #11
            #8, #9, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                  Item1 as RoiActivity,
                  Item2 as RoiActivityDetected,
                  Item3 as ActivityDetected
                )
            SubscribeSubject RoisCount => #14
            #13, #14 -> SubscribeWhen
            -> Take(Count=1)
            -> WorkflowOutput
        #4 -> MemberSelector(Selector=Item1) => #10
        ExternalizedMapping(MinArea, MaxArea) => #11
        #10, #11 -> GroupWorkflow CalculateCentroid => #12
            WorkflowInput Source1 => #0
            ExternalizedMapping(MinArea, MaxArea) => #1
            #0, #1 -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20, MaxArea=nil)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> Bonsai.Vision.LargestBinaryRegion
            -> MemberSelector(Selector=Centroid)
            -> WorkflowOutput
        #7, #9, #10, #12 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
          it.Index as ArenaId,
          it.Value.Item1 as Rois,
          it.Value.Item2 as RoiActivity,
          it.Value.Item3 as CroppedArena,
          it.Value.Item4 as Centroid
        )
    -> WorkflowOutput
-> Concat
-> BehaviorSubject RoisActivity
-> TimeInterval
-> MemberSelector(Selector=Interval.TotalMilliseconds)
