<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Background</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bz:CalculateBackground">
                <bz:PixelSearch>Brightest</bz:PixelSearch>
                <bz:NoiseThreshold>0</bz:NoiseThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:AbsoluteDifference" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Centroids</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>52</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea>1500</cv:MaxArea>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlySorting</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Count</Selector>
                    </Expression>
                    <Expression xsi:type="NotEqual">
                      <Operand xsi:type="IntProperty">
                        <Value>6</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ExpectedConnectedComponents" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:BinaryRegionsTracking">
                <p2:ExpectedConnectedComponents>6</p2:ExpectedConnectedComponents>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Index</rx:KeySelector>
        <rx:ElementSelector>Value</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidPoint.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HeadTailGroup.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Stabilizer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Zoomer.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\PxChange.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\OrientationVisualizer.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="6" To="11" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source3" />
            <Edge From="10" To="11" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>4</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CentroidArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:MultiVisualizer">
          <p2:RadiusSize>30</p2:RadiusSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>TestData\TrackedVideo.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>TestData\FlyCentroids.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>AreaArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>TestData\FlyAreas.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>OrientationArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>TestData\FlyOrientations.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>TestData\RawVideo.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="29" Label="Source1" />
      <Edge From="6" To="37" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="28" Label="Source1" />
      <Edge From="10" To="33" Label="Source1" />
      <Edge From="10" To="35" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="15" To="20" Label="Source1" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="15" To="24" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="26" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="26" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="26" Label="Source3" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="26" Label="Source4" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source5" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="28" To="32" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>